PsychoPy2experiment version="2024.1.3"
Settings
  Completed URL = $"https://unlcorexmuw.qualtrics.com/jfe/form/SV_4TnhafOJwAnh8Tc?id="+String(expInfo['participant'])
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = Task
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    ImageComponent fixation
      image = fix.jpg
      size = [395,255]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      units = pix
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    ImageComponent image_display
      image [set every repeat] = $stimulus
      size [set every repeat] = [sizeX, sizeY]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
      units = pix
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    KeyboardComponent response
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      store = first key
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        orderfiles='order'+str(expInfo['participant']%12)+'.xlsx'
      Begin JS Experiment:
        orderfiles='order'+String(expInfo['participant']%12)+'.xlsx'
  Routine instr
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    ImageComponent instructions
      image [set every repeat] = $display
      size = [sizeX. sizeY]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        instructfiles='instruct'+str(expInfo['participant']%2)+'.xlsx'
      Begin JS Experiment:
        instructfiles='instruct'+String(expInfo['participant']%2)+'.xlsx'
Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = $instructfiles
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = $instrConds
      loopType = sequential
      nReps = 1
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      Routine instr
    LoopTerminator trials_4
  LoopTerminator trials_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $orderfiles
    loopType = sequential
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator trials_2
